PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = ps6
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Routines
  Routine feedback
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if key_resp.keys == corrAns:
            feedback_2 = visual.TextStim(win=win, name='feedback_2',
            text='correct',
            font='Arial',
            pos=(0, 0), height=0.1, wrapWidth=None, ori=0,
            color=[1,1,1], colorSpace='rgb', opacity=1)
            feedback_2.draw()
            win.flip()
            core.wait(3)
        else:
            feedback_2 = visual.TextStim(win=win, name='feedback_2',
            text='incorrect',
            font='Arial',
            pos=(0, 0), height=0.1, wrapWidth=None, ori=0,
            color=[1,1,1], colorSpace='rgb', opacity=1)
            feedback_2.draw()
            win.flip()
            core.wait(3)
        if not key_resp.keys:
            text="No response recorded"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine the_end
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for participating!
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  Routine instructions_2
    TextComponent instructions
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment, you will be presented with 2 tones. Your job is to identify whether the tones went up or down; that is, was the second tone higher or lower than the first? If you think the second tone was higher, please press “m”. If you think the second tone was lower, please press “z”. The instructions will remain on the screen for the duration of the experiment.

        You will be presented with a series of trials and receive feedback for your responses.

        Please ask the experimenter if you have any questions. If you do not have any questions, please press the spacebar to proceed with the experiment.
    KeyboardComponent key_resp1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    SoundComponent sound1_1
      sound [set every repeat] = $sound1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    SoundComponent sound1_2
      sound [set every repeat] = $sound2
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.0
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    TextComponent higher_lower_msg
      color [set every repeat] = black
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Was the second tone higher ("m") or lower ("z") than the first tone?
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'z','m'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = 7
      storeCorrect = True
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Flow
  Routine instructions_2
  LoopInitiator main_stimuli loopType="TrialHandler"
    conditionsFile = main_stimuli.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic32.wav'), ('corrAns', 'z')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic42.wav'), ('corrAns', '/')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic46.wav'), ('corrAns', '/')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic38.wav'), ('corrAns', 'z')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic36.wav'), ('corrAns', 'z')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic44.wav'), ('corrAns', '/')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic48.wav'), ('corrAns', '/')]),
      OrderedDict([('sound1', 'sound/medMusic40.wav'), ('sound2', 'sound/medMusic34.wav'), ('corrAns', 'z')])]
    Routine trial
    Routine feedback
  LoopTerminator main_stimuli
  Routine the_end
